<?xml version="1.0" encoding="ISO-8859-1"?>
<settings>
  <camera1 is_new="False">
    <colortable type="string">green.ctbl</colortable>
    <cycle_value type="float">0.500002646617</cycle_value>
    <exposure_time type="float">0.01</exposure_time>
    <exposure_value type="float">0.0100002646617</exposure_value>
    <external_trigger type="int">0</external_trigger>
    <flip_horizontal type="boolean">False</flip_horizontal>
    <flip_vertical type="boolean">False</flip_vertical>
    <scalemax type="int">4096</scalemax>
    <scalemin type="int">0</scalemin>
    <transpose type="boolean">False</transpose>
    <x_bin type="int">1</x_bin>
    <x_end type="int">2047</x_end>
    <x_pixels type="int">2048</x_pixels>
    <x_start type="int">0</x_start>
    <y_bin type="int">1</y_bin>
    <y_end type="int">2047</y_end>
    <y_pixels type="int">2048</y_pixels>
    <y_start type="int">0</y_start>
  </camera1>
  <film is_new="False">
    <acq_mode type="string">fixed_length</acq_mode>
    <auto_increment type="boolean">False</auto_increment>
    <auto_shutters type="boolean">True</auto_shutters>
    <directory type="string">E:\Data\test</directory>
    <extension type="string"/>
    <filename type="string">test</filename>
    <filetype type="string">.dax</filetype>
    <frames type="int">19</frames>
    <logfile type="string">E:\Data\image_log.txt</logfile>
    <want_bell type="boolean">True</want_bell>
    <want_big_endian type="boolean">False</want_big_endian>
  </film>
  <illumination is_new="False">
	  <shutters type="string">C:/Users/RPI/Desktop/AlgoBioLab/storm-configs/cam/shutter-config-750z7-647z7-560z3-488z1-405z1.xml</shutters>
  </illumination>

  <!-- focus lock settings -->
  <focuslock>
    <hardware_z_scan>
      <!-- Go up in 1 um increments, then go down in 1 um increments.
           The shutter sequence will define which channels will be used in each position
        -->
	    <z_offsets type="string">0.0, 1.5, 3.0, 4.5, 6.0, 7.5, 9.0, 9.0, 7.5, 6.0, 4.5, 3.0, 1.5, 0.0, 0.0, 0.5, 1.0, 4.5, 4.5  </z_offsets>
    </hardware_z_scan>
  </focuslock>

</settings>
