<?xml version="1.0" encoding="ISO-8859-1"?>
<config>

    <!-- The starting directory. -->
    <directory type="directory">C:\Users\RPI\Desktop\AlgoBioLab\experiments\experiment_5\data</directory>

    <!-- The setup name -->
    <setup_name type="string">VizgenAlpha</setup_name>

    <!-- The ui type, this is 'classic' or 'detached' -->
    <ui_type type="string">classic</ui_type>

    <!--
        This has two effects:

        (1) If this is True any exception will immediately crash HAL, which can
        be useful for debugging. If it is False then some exceptions will be
        handled by the modules.

        (2) If it is False we also don't check whether messages are valid.
    -->
    <strict type="boolean">True</strict>

    <!--
        Define the modules to use for this setup.
    -->
    <modules>

        <!--
        This is the main window, you must have this.
        -->
        <hal>
            <module_name type="string">storm_control.hal4000.hal4000</module_name>
            <class_name type="string">HalController</class_name>
        </hal>

        <!--
        You also need all of these.
        -->

        <!-- Camera display. -->
        <display>
            <class_name type="string">Display</class_name>
            <module_name type="string">storm_control.hal4000.display.display</module_name>
            <parameters>

                <!-- The default color table. Other options are in hal4000/colorTables/all_tables -->
                <colortable type="string">ramp_sat.ctbl</colortable>

            </parameters>
        </display>

        <!-- Feeds. -->
        <feeds>
            <class_name type="string">Feeds</class_name>
            <module_name type="string">storm_control.hal4000.feeds.feeds</module_name>
        </feeds>

        <!-- Filming and starting/stopping the camera. -->
        <film>
            <class_name type="string">Film</class_name>
            <module_name type="string">storm_control.hal4000.film.film</module_name>

            <!-- Film parameters specific to this setup go here. -->
            <parameters>
                <extension desc="Movie file name extension" type="string" values=",Red,Green,Blue"></extension>
            </parameters>
        </film>

        <!-- Which objective is being used, etc. -->
        <mosaic>
            <class_name type="string">Mosaic</class_name>
            <module_name type="string">storm_control.hal4000.mosaic.mosaic</module_name>

            <!-- List objectives available on this setup here. -->
            <parameters>
                <flip_horizontal desc="Flip image horizontal (mosaic)" type="boolean">True</flip_horizontal>
                <flip_vertical desc="Flip image vertical (mosaic)" type="boolean">False</flip_vertical>
                <transpose desc="Transpose image (mosaic)" type="boolean">False</transpose>

                <objective desc="Current objective" type="string" values="obj1,obj2,obj3">obj1</objective>
                <obj1 desc="Objective 1" type="custom">60x,0.108,0.0,0.0</obj1>
                <obj2 desc="Objective 2" type="custom">10x,0.65,0.0,0.0</obj2>
                <obj3 desc="Objective 3" type="custom">40x,0.1625,0.0,0.0</obj3>
            </parameters>
        </mosaic>

        <!-- Loading, changing and editting settings/parameters -->
        <settings>
            <class_name type="string">Settings</class_name>
            <module_name type="string">storm_control.hal4000.settings.settings</module_name>
        </settings>

        <!-- Set the time base for films. -->
        <timing>
            <class_name type="string">Timing</class_name>
            <module_name type="string">storm_control.hal4000.timing.timing</module_name>
            <parameters>
                <time_base type="string">camera1</time_base>
            </parameters>
        </timing>

        <!--
        Everything else is optional, but you probably want at least one camera.
        -->

        <!-- Camera control. -->
        <!--
        Note that the cameras must have the names "camera1", "camera2", etc..

        Cameras are either "master" (they provide their own hardware timing)
        or "slave" they are timed by another camera. Each time the cameras
        are started the slave cameras are started first, then the master cameras.
        -->

        <camera1>
            <class_name type="string">Camera</class_name>
            <module_name type="string">storm_control.hal4000.camera.camera</module_name>
            <camera>
                <master type="boolean">True</master>
                <class_name type="string">HamamatsuCameraControl</class_name>
                <module_name type="string">storm_control.hal4000.camera.hamamatsuCameraControl</module_name>
                <parameters>

                    <!-- Which camera to use -->
                    <camera_id type="int">0</camera_id>
                    <!-- These should be specified for every camera, and cannot be changed
                     in HAL when running. -->
                    <!-- These are the display defaults, not the camera range. -->
                    <default_max type="int">2000</default_max>
                    <default_min type="int">100</default_min>
                    <flip_horizontal type="boolean">False</flip_horizontal>
                    <flip_vertical type="boolean">True</flip_vertical>
                    <transpose type="boolean">False</transpose>

                    <!-- These can be changed / editted. -->

                    <!-- This is the extension to use (if any) when saving data from this camera. -->
                    <extension type="string"></extension>

                    <!-- Whether or not data from this camera is saved during filming. -->
                    <saved type="boolean">True</saved>

                </parameters>
            </camera>
        </camera1>


        <!-- DAQ control -->
        <daq>
            <module_name type="string">storm_control.sc_hardware.nationalInstruments.nidaqModule</module_name>
            <class_name type="string">NidaqModule</class_name>

            <configuration>

                <!-- This is the default timing source to use while filming. "Oversampled"
                     films will use the counter for timing. The counter is driven by the
                     camera fire pin. Other films will just use the camera fire pin directly.
                     rising_edge specifies whether the counter is incremented upon the
                     rising (True) or falling (False) edge of the camera signal
                -->
                <timing>
                    <camera_fire_pin type="string">/Dev2/PFI0</camera_fire_pin>
                    <counter type="string">/Dev2/ctr0</counter>
                    <rising_edge type="boolean">False</rising_edge>
                </timing>

                <!-- These are the things that we provide DAQ functionality for.
                     Other modules will request them with a 'get functionality'
                     message and "name" = "daq.xxx.yyy". -->

                <ilm750>
                    <do_task>
                        <source type="string">/Dev2/port0/line5</source>
                    </do_task>
                </ilm750>

                <ilm647>
                    <do_task>
                        <source type="string">/Dev2/port0/line4</source>
                    </do_task>
                </ilm647>

                <ilm561>
                    <do_task>
                        <source type="string">/Dev2/port0/line3</source>
                    </do_task>
                </ilm561>


                <ilm488>
                    <do_task>
                        <source type="string">/Dev2/port0/line2</source>
                    </do_task>
                </ilm488>

                <ilm405>
                    <do_task>
                        <source type="string">/Dev2/port0/line1</source>
                    </do_task>
                </ilm405>

                <mcl>
                    <ao_task>
                        <source type="string">/Dev2/ao0</source>
                    </ao_task>
                </mcl>

            </configuration>

        </daq>



      <!-- Illumination (lasers, shutters, etc) control GUI. -->
      <illumination>
        <class_name type="string">Illumination</class_name>
        <module_name type="string">storm_control.hal4000.illumination.illumination</module_name>
            <configuration>

                <!-- Note: The name of the channel is the gui_name.
                     XML tags cannot start with numbers. -->
                <ch1>
                    <gui_name type="string">750</gui_name>
                    <color type="string">200,0,0</color>
                  <amplitude_modulation>
                    <hw_fn_name>Lumencor750</hw_fn_name>
                  </amplitude_modulation>
                    <digital_modulation>
                        <hw_fn_name type="string">daq.ilm750.do_task</hw_fn_name>
                    </digital_modulation>
                </ch1>


                <ch2>
                    <gui_name type="string">647</gui_name>
                    <color type="string">255,0,0</color>
                    <amplitude_modulation>
                        <hw_fn_name>Lumencor647</hw_fn_name>
                    </amplitude_modulation>
                    <digital_modulation>
                        <hw_fn_name type="string">daq.ilm647.do_task</hw_fn_name>
                    </digital_modulation>
                </ch2>


                <ch3>
                    <gui_name type="string">561</gui_name>
                    <color type="string">255,255,0</color>
                    <amplitude_modulation>
                        <hw_fn_name>Lumencor561</hw_fn_name>
                    </amplitude_modulation>
                    <digital_modulation>
                        <hw_fn_name type="string">daq.ilm561.do_task</hw_fn_name>
                    </digital_modulation>
                </ch3>

                <ch4>
                    <gui_name type="string">488</gui_name>
                    <color type="string">0,255,255</color>
                    <amplitude_modulation>
                        <hw_fn_name>Lumencor488</hw_fn_name>
                    </amplitude_modulation>
                    <digital_modulation>
                        <hw_fn_name type="string">daq.ilm488.do_task</hw_fn_name>
                    </digital_modulation>
                </ch4>
                <ch5>
                    <gui_name type="string">405</gui_name>
                    <color type="string">255,0,255</color>
                    <amplitude_modulation>
                        <hw_fn_name>Lumencor405</hw_fn_name>
                    </amplitude_modulation>
                    <digital_modulation>
                        <hw_fn_name type="string">daq.ilm405.do_task</hw_fn_name>
                    </digital_modulation>
                </ch5>
            </configuration>
        </illumination>

        <!-- Lumencor 405 laser control. -->
        <Lumencor405>
            <module_name type="string">storm_control.sc_hardware.lumencor.LumencorModule</module_name>
            <class_name type="string">Celesta</class_name>
            <configuration>
                <ip type="string">192.168.201.200</ip>
                <laser_id type="int">0</laser_id>
                <used_during_filming type="boolean">True</used_during_filming>
            </configuration>
        </Lumencor405>

        <!-- Lumencor 488 laser control. -->
        <Lumencor488>
            <module_name type="string">storm_control.sc_hardware.lumencor.LumencorModule</module_name>
            <class_name type="string">Celesta</class_name>
            <configuration>
                <ip type="string">192.168.201.200</ip>
                <laser_id type="int">2</laser_id>
                <used_during_filming type="boolean">True</used_during_filming>
            </configuration>
        </Lumencor488>

        <!-- Lumencor 561 laser control. -->
        <Lumencor561>
            <module_name type="string">storm_control.sc_hardware.lumencor.LumencorModule</module_name>
            <class_name type="string">Celesta</class_name>
            <configuration>
                <ip type="string">192.168.201.200</ip>
                <laser_id type="int">4</laser_id>
                <used_during_filming type="boolean">True</used_during_filming>
            </configuration>
        </Lumencor561>

        <!-- Lumencor 647 laser control. -->
        <Lumencor647>
            <module_name type="string">storm_control.sc_hardware.lumencor.LumencorModule</module_name>
            <class_name type="string">Celesta</class_name>
            <configuration>
                <ip type="string">192.168.201.200</ip>
                <laser_id type="int">5</laser_id>
                <used_during_filming type="boolean">True</used_during_filming>
            </configuration>
        </Lumencor647>

        <!-- Lumencor 750 laser control. -->
        <Lumencor750>
            <module_name type="string">storm_control.sc_hardware.lumencor.LumencorModule</module_name>
            <class_name type="string">Celesta</class_name>
            <configuration>
                <ip type="string">192.168.201.200</ip>
                <laser_id type="int">6</laser_id>
                <used_during_filming type="boolean">True</used_during_filming>
            </configuration>
        </Lumencor750>


        <!-- Decided on no IR control -->
        <none_irlaser>
            <module_name type="string">storm_control.sc_hardware.none.noneIRLaserModule</module_name>
            <class_name type="string">NoneIRLaserModule</class_name>
        </none_irlaser>

        <zaber_stage>
            <module_name type="string">storm_control.sc_hardware.zaber.zaberXYModule</module_name>
            <class_name type="string">ZaberXYStage</class_name>

            <configuration>
                <baudrate type="int">115200</baudrate>
                <port type="string">COM4</port>
                <velocity type="float">750000</velocity>
                <x_max type="float">130000</x_max>
                <y_max type="float">100000</y_max>
                <unit_to_um type="float">0.001</unit_to_um>
            </configuration>
        </zaber_stage>

        <!-- MCL Z piezo -->
        <mcl_zstage>
            <module_name type="string">storm_control.sc_hardware.madCityLabs.mclVoltageZModule</module_name>
            <class_name type="string">MCLVoltageZ</class_name>

            <configuration>
                <parameters>
                    <center type="float">110.0</center>
                    <has_center_bar type="boolean">True</has_center_bar>
                    <maximum type="float">200.0</maximum>
                    <minimum type="float">0.0</minimum>
                    <warning_high type="float">190.0</warning_high>
                    <warning_low type="float">0.0</warning_low>
                </parameters>
                <ao_fn_name type="string">daq.mcl.ao_task</ao_fn_name>
                <microns_to_volts type="float">0.05</microns_to_volts>
            </configuration>
        </mcl_zstage>


        <!-- Stage control GUI -->
        <stage>
            <class_name type="string">Stage</class_name>
            <module_name type="string">storm_control.hal4000.stage.stage</module_name>
            <configuration>
                <stage_functionality type="string">zaber_stage</stage_functionality>
            </configuration>
        </stage>

        <!-- ThorLabs Scientific Camera for QPD Emulation -->
        <thorlabs_qpd>
            <class_name type="string">ScientificCamera</class_name>
            <module_name type="string">storm_control.sc_hardware.thorlabs.scientificCamera</module_name>
            <configuration>
                <dll_path type="string">C:/Users/RPI/Desktop/AlgoBioLab/ThorLabsDLL</dll_path>
                <camera_id type="int">0</camera_id>
                <exposure_time_us type="int">29000</exposure_time_us>
                <timeout_ms type="int">1000</timeout_ms>
            </configuration>
        </thorlabs_qpd>

        <scipy_fit>
            <class_name type="string">CameraQPDScipyFit</class_name>
            <module_name type="string">storm_control.hal4000.qpdEmulation.cameraQPDFit</module_name>
            <configuration>
                <sigma type="float">3.0</sigma>
                <background type="int">0</background>
                <zero_dist type="int">0</zero_dist>
                <allow_single_fits type="boolean">false</allow_single_fits>
            </configuration>
        </scipy_fit>

        <qpd>
            <class_name type="string">CameraQPD</class_name>
            <module_name type="string">storm_control.hal4000.qpdEmulation.cameraQPD</module_name>
            <configuration>
                <camera type="string">thorlabs_qpd</camera>
                <fit type="string">scipy_fit</fit>
                <aoi_width type="int">80</aoi_width>
                <aoi_height type="int">80</aoi_height>
                <offset_file type="string">C:/Users/RPI/Desktop/AlgoBioLab/storm-configs/cam/cam_offsets_vizgenalpha.txt</offset_file>
                <units_to_microns type="float">-0.01</units_to_microns>
                <reps type="int">4</reps>
                <parameters>
                    <offset_has_center_bar type="boolean">True</offset_has_center_bar>
                    <offset_maximum type="float">0.0</offset_maximum>
                    <offset_minimum type="float">-3.0</offset_minimum>
                    <offset_warning_high type="float">-0.1</offset_warning_high>
                    <offset_warning_low type="float">-2.9</offset_warning_low>
                    <sum_maximum type="float">30000.0</sum_maximum>
                    <sum_minimum type="float">0.0</sum_minimum>
                    <sum_warning_low type="float">100</sum_warning_low>
                </parameters>
            </configuration>
        </qpd>

        <!-- Focus lock control GUI. -->
        <focuslock>
            <class_name type="string">FocusLock</class_name>
            <module_name type="string">storm_control.hal4000.focusLock.focusLock</module_name>
            <configuration>
                <ir_laser type="string">none_irlaser</ir_laser>
                <ir_power type="int">10</ir_power>
                <lock_modes type="string">
                    HardwareZScanLockMode, CalibrationLockMode
                </lock_modes>
                <qpd type="string">qpd</qpd>
                <z_stage type="string">mcl_zstage</z_stage>
                <parameters>
                    <find_sum>
                        <step_size type="float">0.25</step_size>
                    </find_sum>
                    <locked>
                        <buffer_length type="int">5</buffer_length>
                        <offset_threshold type="float">10</offset_threshold>
                        <minimum_sum type="float">3387.0</minimum_sum>
                        <lock_gain>10</lock_gain>
                        <lock_gain_max>20</lock_gain_max>
                    </locked>
                    <scan>
                        <minimum_sum type="float">50001.00</minimum_sum>
                        <scan_step type="float">0.5</scan_step>
                        <offset_threshold type="float">5.0</offset_threshold>
                    </scan>
                    <jump_size type="float">1</jump_size>
                </parameters>
            </configuration>
        </focuslock>


        <!-- TCP control -->
        <tcp_control>
            <module_name type="string">storm_control.hal4000.tcpControl.tcpControl</module_name>
            <class_name type="string">TCPControl</class_name>
            <configuration>
                <parallel_mode type="boolean">True</parallel_mode>
                <tcp_port type="int">9000</tcp_port>
            </configuration>
        </tcp_control>

    </modules>

</config>
